PsychoPy2experiment version="2024.1.5"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2021.1.4
  Window size (pixels) = [1280, 720]
  expName = exp
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
    TextComponent Instructions
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = In this task you will review sets of objects in triplets. Your task is to pay attention to where and when these objects appear. Press the spacebar to begin.
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    KeyboardComponent start
      allowedKeys = 'space','q'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine MethodCheck
    CodeComponent methodc_code
      Code Type = Py
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      End Routine:
        #if MethodMouse.clicked_name == methodAns:
         #   EncodingTrials.addData ("methodCheck", '1')
        #else:
        #    EncodingTrials.addData ("methodCheck", '0')

        #store whether or not they answered correctly for the "same" or "different" trial type.
        thisExp.addData("Method Clicked", MethodMouse.clicked_name);

        if MethodMouse.clicked_name == methodAns:
            EncodingTrials.addData ("methodCheck", '1')
            methodCheck = 1
        else:
            EncodingTrials.addData ("methodCheck", '0')
            methodCheck = 0

        EncodingTrials.addData("TRIAL_INDEX", str(TRIAL_INDEX))
        EncodingTrials.addData("trialCategory", str(trial_category))
        EncodingTrials.addData("encodingTrials", str(eTrials))
        EncodingTrials.addData("methodCheck", str(methodCheck))
    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Was this set same or different as the previous set?
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    TextComponent sameText
      letterHeight = 0.03
      pos = (-0.2, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = Same
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    TextComponent diffText
      letterHeight = 0.03
      pos = (0.2, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = Different
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    PolygonComponent leftCL
      fillColor = $(1.0000, 1.0000, 1.0000)
      lineWidth = 3
      opacity = 0.5
      pos = (-.2, -.3)
      shape = rectangle
      size = (-0.2, -0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent rightCL
      fillColor = $(1.0000, 1.0000, 1.0000)
      lineWidth = 3
      opacity = 0.5
      pos = (0.2, -0.3)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent MethodMouse
      clickable = rightCL, leftCL
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine first_view
    CodeComponent firstw_code
      Code Type = Py
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      Begin Routine:
        import os
        #iterate through trial type and set a new one for each trial
        #trialType = trialTypes[eTrials]
        #method_Trial = sameDiff[eTrials]

        #iterate through trial type and set a new one for each trial
        method_Trial = sameDiff[eTrials]
        if method_Trial == "same":
            trialType = sameTrials[eTrials]
            else:
                trialType = diffTrials[eTrials]

        #positions
        leftPos = -0.5, 0.0
        midPos = 0.0, 0.0
        rightPos = 0.5, 0.0

        if trialType == 'LMR':
            firstPos = leftPos
            secondPos = midPos
            thirdPos = rightPos
        elif trialType == 'LRM':
                firstPos = leftPos
                secondPos = rightPos
                thirdPos = midPos
        elif trialType == 'MLR':
                firstPos = midPos
                secondPos = leftPos
                thirdPos = rightPos
        elif trialType == 'RML':
                firstPos = rightPos
                secondPos = midPos
                thirdPos = leftPos
        elif trialType == 'RLM':
                firstPos = rightPos
                secondPos = leftPos
                thirdPos = midPos
        elif trialType == 'MRL':
                firstPos = midPos
                secondPos = rightPos
                thirdPos = leftPos

        #set images in triplets
        triplet1 = 'images/'+encodingPics1[eTrials][0]+'.png'
        triplet2 = 'images/'+encodingPics1[eTrials][1]+'.png'
        triplet3 = 'images/'+encodingPics1[eTrials][2]+'.png'

        EncodingTrials.addData ("Trial_Order", trialType)
        thisExp.addData("triplet1", triplet1)
        thisExp.addData("triplet2", triplet2)
        thisExp.addData("triplet3", triplet3)
    ImageComponent Triplet1
      image [set every repeat] = $triplet1
      pos [set every repeat] = $firstPos
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent Triplet2
      image [set every repeat] = $triplet2
      pos [set every repeat] = $secondPos
      size = (0.3, 0.3)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.5
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    ImageComponent Triplet3
      image [set every repeat] = $triplet3
      pos [set every repeat] = $thirdPos
      size = (0.3, 0.3)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_pop
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 0
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    SoundComponent sound_pop2
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 2
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    SoundComponent sound_pop3
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 4
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  Routine initCode
    CodeComponent randomizeImages
      Code Type = Py
      Begin Experiment:
        import random, csv, os, codecs
        #set random seed
        random.seed()

        #define rest of the variables
        retProb = random.random()
        rightPos = None
        midPos = None
        leftPos = None
        firstPos = None
        secondPos = None
        thirdPos = None
        TestQuestion = None
        MouseResp = None
        trialType = None
        methodAns = None
        nextTrial = None
        methodCheck = None
        retrievalImage = None
        response = None
        corrAns = None
        decResponse = None
        encodingType = None
        trialPics = []
        retrievalOld = []
        retrievalNew = []
      Begin Routine:
        allPics = ['OBJ_1','OBJ_2','OBJ_3','OBJ_4','OBJ_5','OBJ_6','OBJ_7','OBJ_8','OBJ_9','OBJ_10','OBJ_11','OBJ_12','OBJ_13','OBJ_14','OBJ_15','OBJ_16','OBJ_17','OBJ_18','OBJ_19','OBJ_20','OBJ_21','OBJ_22','OBJ_23','OBJ_24','OBJ_25','OBJ_26','OBJ_28','OBJ_29','OBJ_30','OBJ_31','OBJ_32','OBJ_33','OBJ_35','OBJ_36','OBJ_37','OBJ_38','OBJ_39','OBJ_40','OBJ_41','OBJ_42','OBJ_43','OBJ_44','OBJ_45','OBJ_46','OBJ_47','OBJ_48','OBJ_49','OBJ_50','OBJ_51','OBJ_52','OBJ_53','OBJ_54','OBJ_55','OBJ_56','OBJ_57','OBJ_58','OBJ_59','OBJ_60','OBJ_61','OBJ_63','OBJ_64','OBJ_65','OBJ_66','OBJ_67','OBJ_68','OBJ_69','OBJ_70','OBJ_71','OBJ_72','OBJ_73','OBJ_74','OBJ_75','OBJ_77','OBJ_78','OBJ_79','OBJ_80','OBJ_81','OBJ_82','OBJ_83','OBJ_84','OBJ_85','OBJ_86','OBJ_87','OBJ_88','OBJ_89','OBJ_91','OBJ_92','OBJ_93','OBJ_94','OBJ_95','OBJ_96','OBJ_97','OBJ_98','OBJ_99','OBJ_100','OBJ_101','OBJ_102','OBJ_103','OBJ_104','OBJ_105','OBJ_106','OBJ_107','OBJ_109','OBJ_110','OBJ_111','OBJ_112','OBJ_113','OBJ_114','OBJ_115','OBJ_116','OBJ_119','OBJ_120','OBJ_121','OBJ_123','OBJ_125','OBJ_126','OBJ_128','OBJ_129','OBJ_130','OBJ_131','OBJ_133','OBJ_134','OBJ_135','OBJ_136','OBJ_137','OBJ_138','OBJ_139','OBJ_140','OBJ_141','OBJ_142','OBJ_143','OBJ_144','OBJ_145','OBJ_146','OBJ_147','OBJ_148','OBJ_149','OBJ_150','OBJ_151','OBJ_152','OBJ_153','OBJ_154','OBJ_155','OBJ_156','OBJ_157','OBJ_158','OBJ_160','OBJ_161','OBJ_163','OBJ_164','OBJ_165','OBJ_166','OBJ_167','OBJ_168','OBJ_170','OBJ_171','OBJ_172','OBJ_173','OBJ_174','OBJ_175','OBJ_177','OBJ_178','OBJ_179','OBJ_181','OBJ_182','OBJ_183','OBJ_184','OBJ_186','OBJ_187','OBJ_188','OBJ_189','OBJ_190','OBJ_191','OBJ_193','OBJ_194','OBJ_195','OBJ_196','OBJ_197','OBJ_198','OBJ_199','OBJ_200','OBJ_202','OBJ_203','OBJ_204','OBJ_205','OBJ_206','OBJ_208','OBJ_209','OBJ_210'];
        sameDiff = ["same","same","same","same","same","same","same","same","same","same","same","same","same","same","same","same","same","same","same","same","diff","diff","diff","diff","diff"];
        shuffle(allPics)
        shuffle(sameDiff)

        #So for the same trials:
        # Define the strings
        fixed_strings = ['LMR', 'RML']  # These will occur 7 times each
        other_strings = ['MLR', 'MRL', 'LRM', 'RLM']  # These will be randomly selected to have total of 7 also

        # Select 7 strings from other_strings with repetitions
        selected_strings = random.choices(other_strings, k=9)

        # Create a list to store the strings
        sameTrials = fixed_strings * 9  # Repeating fixed_strings 9 times
        sameTrials += selected_strings  # Adding the selected 9 strings

        # Shuffle the list
        random.shuffle(sameTrials)

        # Print the randomized list
        print("Randomized string list:")
        print(sameTrials) #now this should be a list of 27 that we will run 20 of, but because it is indexed by eTrials, there needs to be more than 25 items.

        #for the different trials:
        diffTrials = fixed_strings * 9  # Repeating fixed_strings 9 times
        diffTrials += selected_strings  # Adding the selected 9 strings

        # Shuffle the list
        random.shuffle(diffTrials)

        # Print the selected strings)
        print(diffTrials) #because these are indexed by eTrials while they select the images, they need to be more than 25 items
        #hard-coded names of all images and trial types (counterbalanced).
        #could change these to have items come from a csv at this point.
        numItems = 210
        numEncodingBlock1 = 3
        numEncodingBlock2 = 3
        numTotretrieval = 4
        numRetrieval1 = 2
        numRetrieval2 = 2

        # create final stimuli list
        for i in range(0, numItems, 3):
            # make triplet
            trialPics.append(allPics[i:i+3])
            diffTrials += selected_strings
        #70 triplets made from 210 images.

        # these triplets will be shown during encoding
        # Create indices for selecting triplets for each block
        indices_block1 = random.sample(range(len(allPics) // 3), numEncodingBlock1)
        indices_block2 = random.sample(set(range(len(allPics) // 3)) - set(indices_block1), numEncodingBlock2)

        # Create encodingPics for each block using the selected indices
        encodingPics1 = [allPics[i * 3:i * 3 + 3] for i in indices_block1]
        encodingPics2 = [allPics[i * 3:i * 3 + 3] for i in indices_block2]

        # Now you have unique sets of triplets for each block
        print(encodingPics1)
        print(encodingPics2)


        samePics = []
        #diffPics = []
        samePics2 = [] #for block 2
        #this is where I will store the images from same and diff trials so we know which ones to use for retrieval
        eTrials = 0
        TRIAL_INDEX = 0
  Routine RetrievalImage
    CodeComponent ret_img_c
      Code Type = Py
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      Begin Routine:
         retrievalImage = None

        if retProb < 1.1:
            retType = "old"
            RetrievalTrials.addData("retType", "old")
            length = len(samePics)
            if(length == 0):
                sys.exit(1)
            retrievalImage = 'images/' + samePics[retSame] + '.png'
            retSame = retSame + 1
        #so I am telling it that it needs to take an image from same pics
        #and iterate through those pictures with more retrieval trials
        #no 'new' retrieval at this point.
        else:
            retType = "new"
            RetrievalTrials.addData("retType", "new")
            length = len(newPics)
            if(length == 0):
                sys.exit(1)
            retrievalImage = 'images/' + newPics[retNew] + '.png'
            retNew = retNew + 1

        RetrievalTrials.addData("retIMG", retrievalImage)
    ImageComponent retIMG
      image [set every repeat] = $retrievalImage
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
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    SoundComponent sound_pop7
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 0.0
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  Routine old_new_q
    CodeComponent old_new_c
      Code Type = Auto->JS
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    TextComponent question
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Is this object old or new?
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    PolygonComponent oldans
      fillColor = $[1,1,1]
      lineWidth = 3
      opacity = 0.5
      pos = (-0.2, -0.3)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent newans
      fillColor = $[1,1,1]
      lineWidth = 3
      opacity = 0.5
      pos = (0.2, -0.3)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent old_text
      letterHeight = 0.03
      pos = (-0.2, -0.3)
      startVal [time (s)] = 0.0
      text = Old
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    TextComponent new_text
      letterHeight = 0.03
      pos = (0.2, -0.3)
      startVal [time (s)] = 0.0
      text = New
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    MouseComponent mouse_2
      clickable = oldans, newans
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine decision
    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        print(expInfo['Condition'])
        print(expInfo)
        if expInfo['Condition'] == '1':
            TestQuestion = "Where did you see this object?"
        elif expInfo['Condition'] == '2':
            TestQuestion = "When did you see this object?"
        else:
            print("geldim")
    TextComponent decisionQ
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $TestQuestion
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  Routine TestQuestion
    CodeComponent code_6
      Code Type = Py
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine endscreen
  Routine EndScreen
    TextComponent end
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = You are done with this task! Thank you for participating!
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  Routine mask
    ImageComponent Mask
      image = images/Mask.png
      size = (1.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Decision
    CodeComponent dec_code
      Code Type = Py
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      End Routine:
        retTrials = (retTrials + 1)
        RetrievalTrials.addData("retTrials", str(retTrials))
        TRIAL_INDEX = (TRIAL_INDEX + 1)
        RetrievalTrials.addData("TRIAL_INDEX", str(TRIAL_INDEX))
        RetrievalTrials.addData("retIMG", str(retrievalImage))
        RetrievalTrials.addData('Order_Position_Response.leftButton', buttons[0])
        RetrievalTrials.addData('Order_Position_Response.midButton', buttons[1])
        RetrievalTrials.addData('Order_Position_Response.rightButton', buttons[2])
    TextComponent decisionQ_2
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = When did you see this object?
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    PolygonComponent first_left
      fillColor = $[1,1,1]
      lineWidth = 3
      opacity = 0.5
      pos = (0, 0.1)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent second_middle
      fillColor = $[1,1,1]
      lineWidth = 3
      opacity = 0.5
      pos = (0, -0.1)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent third_right
      fillColor = $[1,1,1]
      lineWidth = 3
      opacity = 0.5
      pos = (0, -0.3)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent First
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = First
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    TextComponent Second
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Second
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    TextComponent Third
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Third
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    MouseComponent Order_Position_Response
      clickable = first_left,second_middle,third_right
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Question1Text
    TextComponent text_3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Is this object old or new?
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  Routine methodQText
    TextComponent text_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Was this set same or different as the previous set?
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  Routine Q2Text
    TextComponent question_text
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = When did you see this object?
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  Routine initRecallPics
    CodeComponent recall_c
      Code Type = Py
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      Begin Routine:
        retTrials = 0
        retNew = 0
        retSame = 0
        random.shuffle(samePics)
        #same pics are all pictures that came from 'same' trials
        #shuffle and put in retrieval list.
        #retrievalNew = []
        retrievalSame = []

        retrievalSame.append(samePics)
  Routine code_JS
    CodeComponent code_js
      Code Type = Both
      Begin JS Experiment:
        win=psychoJS.window;
        event=psychoJS.eventManager;
        thisExp=psychoJS.experiment;

        shuffle = function (a) {
            return util.shuffle(a);
        }
        random = function (a) {
            return Math.random();
        }
        //defining functions for js
        retTrials=0;
        decTrials=0;
        nextTrial=[];
        var TestQuestion;
        var MouseResp;
        trialType = [];
        var methodAns;
        var methodCheck;
        var response;
        var corrAns;
        var decResponse;
        var encodingType;
        var retSame;
        var retNew;
        count=0;
        trialTypes = [];
        TestQuestion = [];
        methodAns = [];
        methodCheck = 0;
        MouseResp = 0;
        retrievalImage = [];
        response = [];
        decResponse = [];
        encodingType = [];
        retrievalOld = [];
        retrievalNew = [];
        samePics = [];
        diffPics = [];
        leftPos = [];
        midPos = [];
        rightPos = [];
        triplet1 = [];
        triplet2 = [];
        triplet3= [];
        retType = [];
        img1 =[];
        img2 =[];
        img3 =[];
        retProb = Math.random();
        response = [];
        Ans1 = [];
        Ans2 = [];
        Ans3 = [];
        eTrials = 0;
        list = [];
        sameDiff = [];
        method_Trial = [];
        sound_pop1 = [];
        sound_pop2 = [];
        sound_pop3 = [];
        sound_pop4 = [];
        sound_pop5 = [];
        sound_pop6 = [];
        sound_pop7 = [];
        click_sound = [];
        //have to define these variables for js
  Routine block2initial
    CodeComponent randomizeblock2
      Code Type = Both
      Begin JS Routine:
        allPics = ['OBJ_106','OBJ_107','OBJ_109','OBJ_110','OBJ_111','OBJ_112','OBJ_113','OBJ_114','OBJ_115','OBJ_116','OBJ_119','OBJ_120','OBJ_121','OBJ_123','OBJ_125','OBJ_126','OBJ_128','OBJ_129','OBJ_130','OBJ_131','OBJ_133','OBJ_134','OBJ_135','OBJ_136','OBJ_137','OBJ_138','OBJ_139','OBJ_140','OBJ_141','OBJ_142','OBJ_143','OBJ_144','OBJ_145','OBJ_146','OBJ_147','OBJ_148','OBJ_149','OBJ_150','OBJ_151','OBJ_152','OBJ_153','OBJ_154','OBJ_155','OBJ_156','OBJ_157','OBJ_158','OBJ_160','OBJ_161','OBJ_163','OBJ_164','OBJ_165','OBJ_166','OBJ_167','OBJ_168','OBJ_170','OBJ_171','OBJ_172','OBJ_173','OBJ_174','OBJ_175','OBJ_177','OBJ_178','OBJ_179','OBJ_181','OBJ_182','OBJ_183','OBJ_184','OBJ_186','OBJ_187','OBJ_188','OBJ_189','OBJ_190','OBJ_191','OBJ_193','OBJ_194','OBJ_195','OBJ_196','OBJ_197','OBJ_198','OBJ_199','OBJ_200','OBJ_202','OBJ_203','OBJ_204','OBJ_205','OBJ_206','OBJ_208','OBJ_209','OBJ_210'];
        trialTypes= ["LMR","LMR","LMR","LMR","LMR","LMR","LMR","LMR","RML","RML","RML","RML","RML","RML","RML","RML" ,"MLR","MLR","MRL","MRL","LRM","LRM", "RLM", "RLM","RLM"];
        shuffle(allPics);
        shuffle(trialTypes);

        numItems = 105;
        numEncoding = 25;
        numRetrieval = 40;

        const triplets = [];
        for (let i = 0; i< 75; i+=3) {
            triplets.push(allPics.slice(i,i+3));
            }

        encodingPics = triplets;
        newPics = allPics.slice(75, allPics.length-1);

        samePics = [];
        diffPics = [];
        eTrials = 0;
  Routine break_2
    TextComponent BlockBreak
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:
        You are done with the first portion of the task!

        Now, you have a three minute break. When the time is over, you will see instructions on the screen.

        The next half of the task will be identical to the first half!
    TextComponent text_4
      letterHeight = 0.03
      startVal [time (s)] = 180
      text = In this task you will review sets of objects in triplets. Your task is to pay attention to where and when these objects appear. Press the spacebar to begin.
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    KeyboardComponent start2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 180
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    KeyboardComponent exp_endbreak
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine second2
  Routine first2
    CodeComponent encode2
      Code Type = Both
      Begin JS Routine:
        trialType = trialTypes[eTrials];
        leftPos = [(- 0.5), 0.0];
        midPos = [0.0, 0.0];
        rightPos = [0.5, 0.0];

        if ((trialType === "LMR")) {
            firstPos = leftPos;
            secondPos = midPos;
            thirdPos = rightPos;
        } else if ((trialType === "LRM")) {
            firstPos = leftPos;
            secondPos = rightPos;
            thirdPos = midPos;
        } else if ((trialType === "MLR")) {
            firstPos = midPos;
            secondPos = leftPos;
            thirdPos = rightPos;
        } else if ((trialType === "RML")) {
            firstPos = rightPos;
            secondPos = midPos;
            thirdPos = leftPos;
        } else if ((trialType === "RLM")) {
             firstPos = rightPos;
             secondPos = leftPos;
             thirdPos = midPos;
        } else if ((trialType === "MRL")) {
             firstPos = midPos;
             secondPos = rightPos;
             thirdPos = leftPos;
        }
        triplet1 = (("images/" + encodingPics[eTrials][0]) + ".png");
        triplet2 = (("images/" + encodingPics[eTrials][1]) + ".png");
        triplet3 = (("images/" + encodingPics[eTrials][2]) + ".png");

        thisExp.addData("Trial_Order", trialType);
        thisExp.addData("triplet1", triplet1);
        thisExp.addData("triplet2", triplet2);
        thisExp.addData("triplet3", triplet3);
      End JS Routine:
        console.log('t1',triplet1)
    ImageComponent t1
      image [set every repeat] = $triplet1
      pos [set every repeat] = $firstPos
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent t2
      image [set every repeat] = $triplet2
      pos [set every repeat] = $secondPos
      size = (0.3, 0.3)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.5
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    ImageComponent t3
      image [set every repeat] = $triplet3
      pos [set every repeat] = $thirdPos
      size = (0.3, 0.3)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.5
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  Routine initret2
    CodeComponent ret2code
      Code Type = Both
      Begin JS Routine:
        retProb = Math.random();
        retSame = 0;
        retNew = 0;

        shuffle(newPics);
        shuffle(samePics);

        retrievalNew = [];
        retrievalSame = [];

        retrievalNew.push(newPics);
        retrievalSame.push(samePics);
  Routine clicked_sound
    SoundComponent clickedSound
      sound [set every repeat] = click.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine trial_nos
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        numEncoding =
  Routine fixation
    ImageComponent fix
      image = C:/Users/Display/Desktop/Eyelink_TripletTask/images/fixation.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine Block2Instructions
  Routine init2
    CodeComponent init2code
      Code Type = Py
      Begin Routine:
        sameDiff2 = ["same","same","same","same","same","same","same","same","same","same","same","same","same","same","same","same","same","same","same","same","diff","diff","diff","diff","diff"];
        shuffle(sameDiff2)

        #So for the same trials:
        # Define the strings
        fixed_strings = ['LMR', 'RML']  # These will occur 7 times each
        other_strings = ['MLR', 'MRL', 'LRM', 'RLM']  # These will be randomly selected to have total of 7 also

        # Select 7 strings from other_strings with repetitions
        selected_strings = random.choices(other_strings, k=9)

        # Create a list to store the strings
        sameTrials2 = fixed_strings * 9  # Repeating fixed_strings 9 times
        sameTrials2 += selected_strings  # Adding the selected 9 strings

        # Shuffle the list
        random.shuffle(sameTrials2)

        # Print the randomized list
        print("Randomized string list:")
        print(sameTrials) #now this should be a list of 27 that we will run 20 of, but because it is indexed by eTrials, there needs to be more than 25 items.

        #for the different trials:
        diffTrials2 = fixed_strings * 9  # Repeating fixed_strings 9 times
        diffTrials2 += selected_strings  # Adding the selected 9 strings

        # Shuffle the list
        random.shuffle(diffTrials2)

        # Print the selected strings)
        print(diffTrials2) #because these are indexed by eTrials while they select the images, they need to be more than 25 items

        #hard-coded names of all images and trial types (counterbalanced).
        numItems = 210
        #numTotencoding = 50
        numEncodingBlock1 = 3
        numEncodingBlock2 = 3
        numTotretrieval = 4
        numRetrieval1 = 2
        numRetrieval2 = 2
        eTrials2 = 0
  Routine second_view
    CodeComponent secondw_code
      Code Type = Py
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      Begin Routine:
        # update component parameters for each repeat
            if method_Trial == "same":
                list = [0,1,2]
                random.shuffle(list)
                samePics.append(encodingPics1[eTrials][list[0]])
                EncodingTrials.addData("encodingType","same")
                encodingType = 'same'
            else:
                nextTrial = random.choice(diffTrials)
                while nextTrial == trialType:
                    nextTrial = random.choice(diffTrials)
                    end
                trialType = nextTrial
                methodAns = ['rightCL'] #different
                list = [0,1,2]
                random.shuffle(list)
                triplet1 = 'images/'+encodingPics1[eTrials][list[0]]+'.png'
                triplet2 = 'images/'+encodingPics1[eTrials][list[1]]+'.png'
                triplet3 = 'images/'+encodingPics1[eTrials][list[2]]+'.png'
                EncodingTrials.addData("encodingType","diff")
                encodingType = 'diff'

        #have to re-state positions and trial types
        if trialType == 'LMR':
            firstPos = leftPos
            secondPos = midPos
            thirdPos = rightPos
        elif trialType == 'LRM':
            firstPos = leftPos
            secondPos = rightPos
            thirdPos = midPos
        elif trialType == 'MLR':
            firstPos = midPos
            secondPos = leftPos
            thirdPos = rightPos
        elif trialType == 'RML':
            firstPos = rightPos
            secondPos = midPos
            thirdPos = leftPos
        elif trialType == 'RLM':
            firstPos = rightPos
            secondPos = leftPos
            thirdPos = midPos
        elif trialType == 'MRL':
            firstPos = midPos
            secondPos = rightPos
            thirdPos = leftPos

        EncodingTrials.addData("triplet1", triplet1)
        EncodingTrials.addData("triplet2", triplet2)
        EncodingTrials.addData("triplet3", triplet3)
        EncodingTrials.addData("nextTrial", nextTrial)
      End Routine:
        eTrials = eTrials + 1
        TRIAL_INDEX = TRIAL_INDEX + 1
        EncodingTrials.addData("encodingTrials", str(eTrials))
        EncodingTrials.addData("TRIAL_INDEX", str(TRIAL_INDEX))
    ImageComponent img1
      image [set every repeat] = $triplet1
      pos [set every repeat] = $firstPos
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent img2
      image [set every repeat] = $triplet2
      pos [set every repeat] = $secondPos
      size = (0.3, 0.3)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.5
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    ImageComponent img3
      image [set every repeat] = $triplet3
      pos [set every repeat] = $thirdPos
      size = (0.3, 0.3)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_pop4
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 0.0
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    SoundComponent sound_pop5
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 2
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    SoundComponent sound_pop6
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 4
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  Routine first_view2
    CodeComponent firstw_code_2
      Code Type = Py
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      Begin Routine:
        import os
        #iterate through trial type and set a new one for each trial
        #trialType = trialTypes[eTrials]
        #method_Trial = sameDiff[eTrials]

        #iterate through trial type and set a new one for each trial
        method_Trial = sameDiff2[eTrials2]
        if method_Trial == "same":
            trialType = sameTrials2[eTrials2]
            else:

            #positions
        leftPos = -0.5, 0.0
        midPos = 0.0, 0.0
        rightPos = 0.5, 0.0

        if trialType == 'LMR':
                firstPos = leftPos
                secondPos = midPos
                thirdPos = rightPos
        elif trialType == 'LRM':
                firstPos = leftPos
                secondPos = rightPos
                thirdPos = midPos
        elif trialType == 'MLR':
                firstPos = midPos
                secondPos = leftPos
                thirdPos = rightPos
        elif trialType == 'RML':
                firstPos = rightPos
                secondPos = midPos
                thirdPos = leftPos
        elif trialType == 'RLM':
                firstPos = rightPos
                secondPos = leftPos
                thirdPos = midPos
        elif trialType == 'MRL':
                firstPos = midPos
                secondPos = rightPos
                thirdPos = leftPos
        #set images in triplets
        triplet1 = 'images/'+encodingPics2[eTrials2][0]+'.png'
        triplet2 = 'images/'+encodingPics2[eTrials2][1]+'.png'
        triplet3 = 'images/'+encodingPics2[eTrials2][2]+'.png'

        EncodingBlock2.addData ("Trial_Order", trialType)
         #   thisExp.addData("TrialOrder", trialType)
        thisExp.addData("triplet1", triplet1)
        thisExp.addData("triplet2", triplet2)
        thisExp.addData("triplet3", triplet3)
    ImageComponent Triplet1_2
      image [set every repeat] = $triplet1
      pos [set every repeat] = $firstPos
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent Triplet2_2
      image [set every repeat] = $triplet2
      pos [set every repeat] = $secondPos
      size = (0.3, 0.3)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.5
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    ImageComponent Triplet3_2
      image [set every repeat] = $triplet3
      pos [set every repeat] = $thirdPos
      size = (0.3, 0.3)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_pop_2
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 0
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    SoundComponent sound_pop2_2
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 2
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    SoundComponent sound_pop3_2
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 4
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  Routine second_view2
    CodeComponent secondw_code_2
      Code Type = Py
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      Begin Routine:
         #used to be same or different trials based on random number, but now making sure there are 20 same trials and 5 diff trials
        if method_Trial == "same":
            list = [0,1,2]
            random.shuffle(list)
            samePics2.append(encodingPics2[eTrials2][list[0]])
            EncodingBlock2.addData("encodingType","same")
            encodingType = 'same'
            else:
                nextTrial = random.choice(diffTrials2)
                while nextTrial == trialType:
                    nextTrial = random.choice(diffTrials2)
                    end
                trialType = nextTrial
                methodAns = ['rightCL'] #different
                list = [0,1,2]
                random.shuffle(list)
                triplet1 = 'images/'+encodingPics2[eTrials2][list[0]]+'.png'
                triplet2 = 'images/'+encodingPics2[eTrials2][list[1]]+'.png'
                triplet3 = 'images/'+encodingPics2[eTrials2][list[2]]+'.png'
                EncodingBlock2.addData("encodingType","diff")
                encodingType = 'diff'

        #have to re-state positions and trial types
        if trialType == 'LMR':
            firstPos = leftPos
            secondPos = midPos
            thirdPos = rightPos
        elif trialType == 'LRM':
            firstPos = leftPos
            secondPos = rightPos
            thirdPos = midPos
        elif trialType == 'MLR':
            firstPos = midPos
            secondPos = leftPos
            thirdPos = rightPos
        elif trialType == 'RML':
            firstPos = rightPos
            secondPos = midPos
            thirdPos = leftPos
        elif trialType == 'RLM':
            firstPos = rightPos
            secondPos = leftPos
            thirdPos = midPos
        elif trialType == 'MRL':
            firstPos = midPos
            secondPos = rightPos
            thirdPos = leftPos
        EncodingBlock2.addData("triplet1", triplet1)
        EncodingBlock2.addData("triplet2", triplet2)
        EncodingBlock2.addData("triplet3", triplet3)
        EncodingBlock2.addData("nextTrial", nextTrial)
        EncodingBlock2.addData("Trial_Order", trialType)
      End Routine:
        eTrials2 = eTrials2 + 1
        TRIAL_INDEX = TRIAL_INDEX + 1
        EncodingBlock2.addData("encodingTrials", str(eTrials2))
        EncodingBlock2.addData("TRIAL_INDEX", str(TRIAL_INDEX))
    ImageComponent img1_2
      image [set every repeat] = $triplet1
      pos [set every repeat] = $firstPos
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent img2_2
      image [set every repeat] = $triplet2
      pos [set every repeat] = $secondPos
      size = (0.3, 0.3)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.5
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    ImageComponent img3_2
      image [set every repeat] = $triplet3
      pos [set every repeat] = $thirdPos
      size = (0.3, 0.3)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_pop4_2
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 0.0
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    SoundComponent sound_pop5_2
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 2
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    SoundComponent sound_pop6_2
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 4
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  Routine mask_2
    ImageComponent Mask_2
      image = images/Mask.png
      size = (1.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine clicked_sound2
    SoundComponent clickedSound_2
      sound [set every repeat] = click.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine MethodCheck2
    CodeComponent methodc_code_2
      Code Type = Py
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      End Routine:
        #if MethodMouse.clicked_name == methodAns:
         #   EncodingTrials.addData ("methodCheck", '1')
        #else:
        #    EncodingTrials.addData ("methodCheck", '0')

        #store whether or not they answered correctly for the "same" or "different" trial type.
        thisExp.addData("Method Clicked", MethodMouse.clicked_name);

        if MethodMouse.clicked_name == methodAns:
            EncodingBlock2.addData ("methodCheck", '1')
            methodCheck = 1
        else:
            EncodingBlock2.addData ("methodCheck", '0')
            methodCheck = 0
        EncodingBlock2.addData("TRIAL_INDEX", str(TRIAL_INDEX))
        EncodingBlock2.addData("trialCategory", str(trial_category))
        EncodingBlock2.addData("encodingTrials", str(eTrials2))
        EncodingBlock2.addData("methodCheck", str(methodCheck))
    TextComponent text_5
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Was this set same or different as the previous set?
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    TextComponent sameText_2
      letterHeight = 0.03
      pos = (-0.2, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = Same
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    TextComponent diffText_2
      letterHeight = 0.03
      pos = (0.2, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = Different
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    PolygonComponent leftCL_2
      fillColor = $(1.0000, 1.0000, 1.0000)
      lineWidth = 3
      opacity = 0.5
      pos = (-.2, -.3)
      shape = rectangle
      size = (-0.2, -0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent rightCL_2
      fillColor = $(1.0000, 1.0000, 1.0000)
      lineWidth = 3
      opacity = 0.5
      pos = (0.2, -0.3)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent MethodMouse_2
      clickable = rightCL, leftCL
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine RetrievalImage2
    CodeComponent ret_img_c_2
      Code Type = Py
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      Begin Routine:
        # update component parameters for each repeat
        retrievalImage = None
        if retProb < 1.1:
            retType = "old"
            RetrievalBlock2.addData("retType", "old")
            length = len(samePics)
            if(length == 0):
                sys.exit(1)
                retrievalImage = 'images/' + samePics2[retSame] + '.png'
                retSame = retSame + 1
            #so I am telling it that it needs to take an image from same pics
            #and iterate through those pictures with more retrieval trials
            #no 'new' retrieval at this point.
            else:
                retType = "new"
                RetrievalBlock2.addData("retType", "new")
                length = len(newPics)
                if(length == 0):
                    sys.exit(1)
                retrievalImage = 'images/' + newPics[retNew] + '.png'
                retNew = retNew + 1

        retIMG.setImage(retrievalImage)
    ImageComponent retIMG_2
      image [set every repeat] = $retrievalImage
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
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    SoundComponent sound_pop7_2
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 0.0
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  Routine initRecallPics2
    CodeComponent recall_c_2
      Code Type = Py
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      Begin Routine:
        retTrials = 0
        retNew = 0
        retSame = 0
        random.shuffle(samePics2)
        #same pics are all pictures that came from 'same' trials
        #shuffle and put in retrieval list.
        #retrievalNew = []
        retrievalSame = []

        retrievalSame.append(samePics2)
  Routine Decision2
    CodeComponent dec_code_2
      Code Type = Py
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      End Routine:
        retTrials = retTrials + 1
        TRIAL_INDEX = TRIAL_INDEX + 1
        RetrievalBlock2.addData("retTrials", str(retTrials))
        RetrievalBlock2.addData("TRIAL_INDEX", str(TRIAL_INDEX))
        thisExp.addData("TRIAL_INDEX", str(TRIAL_INDEX))
        RetrievalBlock2.addData("retIMG", str(retrievalImage))
        RetrievalBlock2.addData('Order_Position_Response.leftButton', buttons[0])
        RetrievalBlock2.addData('Order_Position_Response.midButton', buttons[1])
        RetrievalBlock2.addData('Order_Position_Response.rightButton', buttons[2])
    TextComponent decisionQ_3
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = When did you see this object?
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    PolygonComponent first_left_2
      fillColor = $[1,1,1]
      lineWidth = 3
      opacity = 0.5
      pos = (0, 0.1)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent second_middle_2
      fillColor = $[1,1,1]
      lineWidth = 3
      opacity = 0.5
      pos = (0, -0.1)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent third_right_2
      fillColor = $[1,1,1]
      lineWidth = 3
      opacity = 0.5
      pos = (0, -0.3)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent First_2
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = First
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    TextComponent Second_2
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Second
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    TextComponent Third_2
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Third
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    MouseComponent Order_Position_Response_2
      clickable = first_left,second_middle,third_right
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  Routine initCode
  EyetrackerCalibrationRoutine calibration
  Routine trial
  LoopInitiator EncodingTrials loopType="TrialHandler"
    loopType = random
    nReps = numEncodingBlock1
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    Routine fixation
    Routine first_view
    Routine mask
    Routine second_view
    Routine methodQText
    Routine MethodCheck
    Routine clicked_sound
  LoopTerminator EncodingTrials
  Routine break_2
  EyetrackerCalibrationRoutine calibration
  Routine initRecallPics
  LoopInitiator RetrievalTrials loopType="TrialHandler"
    loopType = random
    nReps = numRetrieval1
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    Routine fixation
    Routine RetrievalImage
    Routine Q2Text
    Routine Decision
    Routine clicked_sound
  LoopTerminator RetrievalTrials
  Routine init2
  Routine trial
  LoopInitiator EncodingBlock2 loopType="TrialHandler"
    loopType = random
    nReps = numEncodingBlock2
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    Routine fixation
    Routine first_view2
    Routine mask
    Routine second_view2
    Routine methodQText
    Routine MethodCheck2
    Routine clicked_sound
  LoopTerminator EncodingBlock2
  Routine break_2
  EyetrackerCalibrationRoutine calibration
  Routine initRecallPics2
  LoopInitiator RetrievalBlock2 loopType="TrialHandler"
    loopType = random
    nReps = numRetrieval2
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    Routine RetrievalImage2
    Routine Q2Text
    Routine Decision2
    Routine clicked_sound
  LoopTerminator RetrievalBlock2
  Routine EndScreen
